CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[0-9]{3})(?P<Col>[0-9]{3})(?P<Field>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:C
    Metadata category:FileLocation

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:green
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:green
    Name the primary objects to be identified:green_cilia
    Typical diameter of objects, in pixel units (Min,Max):1,9
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:100
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:4
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.90
    Upper outlier fraction:0.00
    Averaging method:Median
    Variance method:Median absolute deviation
    # of deviations:1
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
RelateObjects:[module_num:8|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
    Parent objects:Cells
    Child objects:green_cilia
    Name the output object:Cilia_in_cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:9|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
    Select the objects to filter:green_cilia
    Name the output objects:One_cilia_per_cell
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cilia_in_cells
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Select the measurement to filter by:Parent_Cells
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:red
    Name the primary objects to be identified:red_nucleus
    Typical diameter of objects, in pixel units (Min,Max):15,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:red
    Select objects to measure:red_nucleus

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

MeasureColocalization:[module_num:13|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
    Hidden:2
    Hidden:1
    Select an image to measure:DNA
    Select an image to measure:red
    Set threshold as percentage of maximum intensity for the images:20
    Select where to measure correlation:Within objects
    Select an object to measure:red_nucleus
    Run all metrics?:Yes
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:Nuclei_outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:Nuclei

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:green
    Name the output image:One_cilia_per_cell_outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF80
    Select objects to display:One_cilia_per_cell

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:green
    Name the output image:green_cilia_outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF80
    Select objects to display:green_cilia

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:Cells_outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|RPE_KO_missenses_2019-11-15\\Gab151119_plate2\\Meas_01(2019-11-15_11-10-27)\\For paper
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Cells,Image|Count_One_cilia_per_cell,Image|Count_green_cilia,Image|Count_Nuclei,Image|Count_red_nucleus,Image|Metadata_Well
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:RPE_KO_missenses_plate1_analysis2a
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Cells_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cells
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|RPE_KO_missenses_2019-11-15\\Gab151119_plate2\\Meas_01(2019-11-15_11-10-27)\\For paper
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nuclei
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|RPE_KO_missenses_2019-11-15\\Gab151119_plate2\\Meas_01(2019-11-15_11-10-27)\\For paper
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:green_cilia_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cilia
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|RPE_KO_missenses_2019-11-15\\Gab151119_plate2\\Meas_01(2019-11-15_11-10-27)\\For paper
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:One_cilia_per_cell_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:one_cilia
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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